OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
Comment
  Automatically select only the EEG channels,
  properly name them with the 10-20 system,
  and filter to appropriate EEG frequencies.
Comment
  This side-lined process is simply a clock signal,
  where time stamps are sent to a TCP port in
  case we need them in the Python script.
Comment
  Display signal for real-time monitoring,
  save it to an EDF file for training,
  and stop when End_of_Experiment is sent.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:19"
  Channel List = 1:19
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = F7; Fp1; Fp2;F8;F3;Fz;F4;C3;Cz;P8;P7;Pz;P4;T3;P3;O1;O2;C4;T4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 45
Input stream 1=#3, Input stream 2=#0.Stimulations, Input stream 3=#0.Channel units -> Identity => #4
Data=#4.Output stream 1, Stimulations=#4.Output stream 2, Channel Units=#4.Output stream 3 -> Signal display "Filtered Data"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#4.Output stream 1, Stimulations=#4.Output stream 2 -> EDF File Writer
  Filename = ${Player_ScenarioDirectory}/emotion-offline-[$core{date}-$core{time}].gdf
#4.Output stream 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#4.Output stream 2 -> Stimulation listener
  Log level to use = Information

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> TCP Writer
  Port = 5678
  Output format = Raw
