OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Testing Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Training-Model.xml
  Mean = Mean-Riemann.csv
  Stimulation Class 1 = OVTK_GDF_Left
  Stimulation Class 2 = OVTK_GDF_Right
  Log Level = Information

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:19"
  Channel List = 1:19
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 80
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Covariance Matrix Calculator
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = Warning
-> Tangent Space => #5
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = Warning
Features=#5 -> Valence Classifier Processor => #6
  Filename to load configuration from = ${Path_UserData}/valence-classifier.xml
Features=#5 -> Arousal Classifier Processor => #7
  Filename to load configuration from = ${Path_UserData}/arousal-classifier.xml
Stimulation stream 1=#6.Labels, Stimulation stream 2=#7.Labels -> Stimulation listener
  Log level to use = Information
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
