OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Training Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Model Filename = Riemann-Training-Model.xml
  Mean = Mean-Riemann.csv
  Stimulation Class 1 = OVTK_GDF_Left
  Stimulation Class 2 = OVTK_GDF_Right
  Log Level = Information

BrainVision Format file reader => #0
  Filename (header) = C:/Users/zatraylo/PycharmProjects/Tutoring/Data/emotion/exp.vhdr
  Epoch size (in sec) = 0.0625
  Convert stimuli to OpenViBE labels = false
#0.EEG stream -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 80
Input stream 1=#1, Input stream 2=#0.Stimulations -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Low Valence"
  Epoch duration (in sec) = 30
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Covariance Matrix Calculator
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = Warning
-> Tangent Space => #6
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = Warning
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "High Valence"
  Epoch duration (in sec) = 30
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Covariance Matrix Calculator
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = Warning
-> Tangent Space => #10
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = Warning
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Low Arousal"
  Epoch duration (in sec) = 30
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_10
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Covariance Matrix Calculator
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = Warning
-> Tangent Space => #14
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = Warning
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "High Arousal"
  Epoch duration (in sec) = 30
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_11
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Covariance Matrix Calculator
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = Warning
-> Tangent Space => #18
  Tangent Space = true
  Filename to Reference Matrix (CSV, empty for Identity) =
  Log Level = Warning
#2.Output stream 2 -> Identity => #19
Stimulations=#19, Features for class 1=#6, Features for class 2=#10 -> Valence Classifier trainer => #20
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Path_UserData}/valence-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Polinomial
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Stimulations=#19, Features for class 1=#14, Features for class 2=#18 -> Arousal Classifier trainer => #21
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Path_UserData}/arousal-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_10
  Class 2 label = OVTK_StimulationId_Label_11
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = Nu-SVC
  Degree = 3
  Kernel type = Polinomial
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Stimulation stream 1=#20, Stimulation stream 2=#21 -> Stimulation listener
  Log level to use = Information
