OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)
Comment
  Choose either real-time data
  or a recorded past session
Comment
  This scenario visualizes the EEG data in several ways:
  -visual cortex activation
  -gamma band power
  -raw eeg (always useful)
  -topographical activation
  -left vs. right hemisphere power

GDF file reader
  Filename = C:/Users/zatraylo/Desktop/OpenViBE Scenarios/Armen/emotion-offline-[2022.11.08-12.22.22].gdf
  Samples per buffer = 32
  Subtract physical minimum = false

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

BrainVision Format file reader => #2
  Filename (header) = C:/Users/zatraylo/PycharmProjects/Tutoring/Data/emotion/exp.vhdr
  Epoch size (in sec) = 0.0625
  Convert stimuli to OpenViBE labels = false
#2.EEG stream -> Identity => #3
-> Channel Selector "Visual Cortex"
  Channel List = P7;P8;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Signal Power Log
-> Spatial Filter "Channel Reduction" => #6
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
  Filter matrix file =
Data=#6 -> Signal display "Visual Cortex Activation"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = false
  Left ruler = true
  Multiview = false
#3 -> Temporal filter "Gamma Band"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 80
-> Signal Power Log
-> Spatial Filter "Channel Reduction" => #10
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 19
  Filter matrix file =
Data=#10 -> Signal display "Gamma Power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = false
  Left ruler = true
  Multiview = false
Data=#3 -> Signal display "Raw EEG Data"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Channel Selector "Left Hemisphere"
  Channel List = F7;Fp1;F3;C3;P7;T3;P3;O1
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Channel Reduction" => #14
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
#3 -> Channel Selector "Right Hemishpere"
  Channel List = Fp2;F8;F4;P8;P4;O2;C4;T4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Channel Reduction" => #16
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
Input - A=#14, Input - B=#16 -> Simple DSP "Hemisphere Difference"
  Equation = abs(a)-abs(b)
-> Channel Rename
  New channel names = Diff
-> Signal average "Smoothing" => #19
Data=#19 -> Signal display "Left (Positive) vs. Right (Negative) Activation"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal filter "Full Spectrum"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 80
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = .5
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = .0003
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
